PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/counterbalance/130000.csv', 'resources/counterbalance/130001.csv', 'resources/counterbalance/130002.csv', 'resources/counterbalance/130003.csv', 'resources/counterbalance/130004.csv', 'resources/counterbalance/130005.csv', 'resources/counterbalance/130006.csv', 'resources/counterbalance/130007.csv', 'resources/counterbalance/130008.csv', 'resources/counterbalance/130009.csv', 'resources/counterbalance/130010.csv', 'resources/counterbalance/130011.csv', 'resources/counterbalance/130012.csv', 'resources/counterbalance/130013.csv', 'resources/counterbalance/130014.csv', 'resources/counterbalance/130015.csv', 'resources/counterbalance/130016.csv', 'resources/counterbalance/130017.csv', 'resources/counterbalance/130018.csv', 'resources/counterbalance/130019.csv', 'resources/counterbalance/130020.csv', 'resources/counterbalance/130021.csv', 'resources/counterbalance/130022.csv', 'resources/counterbalance/130023.csv', 'resources/counterbalance/130024.csv', 'resources/counterbalance/130025.csv', 'resources/counterbalance/130026.csv', 'resources/counterbalance/130027.csv', 'resources/counterbalance/130028.csv', 'resources/counterbalance/130029.csv', 'resources/counterbalance/130030.csv', 'resources/counterbalance/130031.csv', 'resources/passageList_1.xlsx', 'resources/passageList_2.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0.6549,0.6549,0.6549]
  expName = read-aloud-o_s1_r2_e1
  logging level = debug
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Routines
  Routine calibration
    TextComponent calibText
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.2
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      text:
        Audio calibrating…

        Please remain silent for 5 seconds.
    TextComponent calibTimer
      color = black
      letterHeight = 0.05
      pos = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $round(5 - t)
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  Routine breakLoop
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        counterbalance.finished=True
  Routine instructCalibration
    TextComponent explainCalib
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.2
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      text:
        Before we begin, a short period of silence is needed to calibrate the task audio.

        The calibration period will last 5 seconds. During the calibration, please do not speak, but it is OK for there to be background noise.

        To calibrate the audio, please press the space key.
    KeyboardComponent key_resp_02
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct
    TextComponent text_3
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.2
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      text:
        The audio calibration is complete.

        Press the space key when you are ready to begin reading the first passage.

        Remember to try to read clearly, at your normal volume and reading speed. When you finish reading a passage, press the space key to continue.

        Press the space key to proceed to the first passage.
    KeyboardComponent key_resp_03
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introLDT
    TextComponent welcomeLDT
      color = black
      letterHeight = 0.065
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text:
        In this task, you will be presented with a word on screen.

        You must decide if this is a real word or not. You will press the letter "J" if the word on screen is a real word. You will press the letter "F" if the word on screen is NOT a real word.

        Try to answer as quickly but as accurately as possible.

        Press either "F" or "J" to continue.
    TextComponent headerLDT
      color = black
      letterHeight = 0.08
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Welcome to the word decision task!
      wrapWidth = 1.3
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    KeyboardComponent key_resp_07
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ldtWelcomeResponseF
      color = black
      letterHeight = 0.04
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        F

        not a word
    TextComponent ldtWelcomeResponseJ
      color = black
      letterHeight = 0.04
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        J

        is a word
  Routine ldtPractice
    TextComponent ldtPracticeWord
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $ldtPractice
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    KeyboardComponent practiceResponse
      allowedKeys = 'f','j'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent ldtPracticeResponseF
      color = black
      letterHeight = 0.04
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 1.3
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      text:
        F

        not a word
    TextComponent ldtPracticeResponseJ
      color = black
      letterHeight = 0.04
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 1.3
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      text:
        J

        is a word
  Routine moreInstruct
    TextComponent finalRemind
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text:
        Great job on the practice round!

        On the next screen, you will begin the real task. It is just like the practice, but we won’t tell you if each answer is right or not.

        This task does not have any breaks, but it will only last about 12 minutes.

        Press the space key to begin the word decision task.
    KeyboardComponent key_resp_09
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ldtTask
    TextComponent ldtStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $ldtStim
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    KeyboardComponent ldtResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent ldtResponseF
      color = black
      letterHeight = 0.04
      pos = (-.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 1.3
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      text:
        F

        not a word
    TextComponent ldtResponseJ
      color = black
      letterHeight = 0.04
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 1.3
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      text:
        J

        is a word
  Routine goodbye
  Routine feedback
    CodeComponent stgMessage
      Code Type = Auto->JS
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      Begin Routine:
        if not practiceResponse.keys :
            msg="Sorry, too slow."
        elif practiceResponse.corr:
            msg="Correct!"
        else:
            msg="Oops! That was wrong."
    TextComponent feedbackMessage
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine interTrial
    TextComponent blank_interTrial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixPractice
    TextComponent fixPracticecross
      color = black
      letterHeight = 0.35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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  Routine readComplete
    TextComponent readCompleteintroLDT
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.2
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      text:
        You have completed the reading task!

        Next, you will complete a word decision task.

        Press the space bar to continue.
    KeyboardComponent key_resp_06
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introPractice
    TextComponent introPracticeText
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      units = norm
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      text:
        First, we will do a short practice session.

        When the letter string appears, you need to make a decision as fast as possible whether the string is a word in English or not.

        For example: "pretty/preft".

        If you think the string forms a word, press the "J" button on the keyboard.

        If you think the string is not a word, press the "F" button on the keyboard.

        For this practice session, we will tell you if you got the right answer or not.

        Press either "F" or "J" to start the practice session.
    KeyboardComponent key_resp_08
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ldtIntroResponseF
      color = black
      letterHeight = 0.04
      pos = (-.4, -.4) 
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        F

        not a word
    TextComponent ldtIntroResponseJ
      color = black
      letterHeight = 0.04
      pos = (.4, -.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        J

        is a word
  Routine fixLdtTask
    TextComponent fixLdtTaskCross
      color = black
      letterHeight = 0.35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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  Routine welcome
    TextComponent headerWelcome
      color = black
      letterHeight = 0.08
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Hello!
      wrapWidth = 1.3
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    TextComponent welcomeText
      color = black
      letterHeight = 0.065
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text:
        You will complete two tasks today.

        The first is a reading task.
        This task takes about XX minutes.

        The second is a word decision task.
        This task takes about 15 minutes.

        After you complete both tasks, you need to return (briefly!) to the questionnaires.

        Please press to space bar to continue.
    KeyboardComponent key_resp_00
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        participant_id = expInfo['participant']
        passageCount = 0
  Routine introReading
    TextComponent welcomeReading
      color = black
      letterHeight = 0.065
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text:
        In this task, you will be presented with a series of text passages that you should read aloud.

        Please try to read clearly, at a normal volume, as if you were reading a story to another person.

        There are a total of 10 passages to read, and each passage should take about 1-2 minutes to read. After each passage, you will be asked a question based on the text.

        You may take a short break (less than a minute) between reading the passages if you like, or can continue to the next passage right away.

        Please press the space key to continue.
    KeyboardComponent key_resp_01
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent headerReading
      color = black
      letterHeight = 0.08
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Welcome to the reading task!
      wrapWidth = 1.3
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  Routine passage1
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        passageCount += 1
    TextComponent passageText1
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstList
      units = norm
      wrapWidth = 1.7
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    TextComponent instructContinue1
      color = black
      letterHeight = 0.065
      pos = (0, -.85)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = .8
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp_04
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine challenge1
    TextComponent challengeText1
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstchallengeQuestion
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    KeyboardComponent challengeResponse1
      allowedKeys = 'a','b','c','d'
      correctAns = $firstcorrectAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent challengeOptions1
      color = black
      letterHeight = 0.04
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstletterA + str(firstchoiceA) + '\n' + firstletterB + str(firstchoiceB) + '\n' + firstletterC + str(firstchoiceC) + '\n' + firstletterD + str(firstchoiceD)
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    TextComponent answerInstruct1
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        - — -

        Select your answer by pressing the corresponding letter on the keyboard.
    TextComponent counterText1
      color = black
      letterHeight = 0.05
      pos = (.7, .7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(passageCount) + ' of 20'
      units = norm
      wrapWidth = 1.3
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  Routine passage2
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        passageCount += 1
    TextComponent passageText2
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $secondList
      units = norm
      wrapWidth = 1.7
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    TextComponent instructContinue2
      color = black
      letterHeight = 0.065
      pos = (0, -.85)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = .8
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine challenge2
    TextComponent challengeText2
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $secondchallengeQuestion
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    KeyboardComponent challengeResponse2
      allowedKeys = 'a','b','c','d'
      correctAns = $secondcorrectAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent challengeOptions2
      color = black
      letterHeight = 0.04
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $secondletterA + str(secondchoiceA) + '\n' + secondletterB + str(secondchoiceB) + '\n' + secondletterC + str(secondchoiceC) + '\n' + secondletterD + str(secondchoiceD)
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    TextComponent answerInstruct2
      color = black
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        - — -

        Select your answer by pressing the corresponding letter on the keyboard.
    TextComponent counterText2
      color = black
      letterHeight = 0.05
      pos = (.7, .7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(passageCount) + ' of 20'
      units = norm
      wrapWidth = 1.3
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  Routine readyScreen1
    TextComponent readingBreak1
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      units = norm
      wrapWidth = 1.2
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      text:
        If you need a break, please take a short break now (less than a minute).

        When you are ready to start reading the next passage, please press the space key to continue.
    KeyboardComponent key_resp_05
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    TextComponent timer1
      color = black
      letterHeight = 0.05
      pos = (.7, .7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every frame] = $round(60 - t)
      units = norm
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  Routine readyScreen2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if passageCount == 4:
            continueRoutine = False
    TextComponent readingBreak2
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      units = norm
      wrapWidth = 1.2
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      text:
        If you need a break, please take a short break now (less than a minute).

        When you are ready to start reading the next passage, please press the space key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    TextComponent timer2
      color = black
      letterHeight = .05
      pos = (.7, .7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every frame] = $round(60 - t)
      units = norm
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Flow
  Routine welcome
  Routine introReading
  Routine instructCalibration
  Routine calibration
  Routine instruct
  LoopInitiator counterbalance loopType="TrialHandler"
    conditionsFile = $'resources/counterbalance/choose_' + participant_id[-1] + '.csv' 
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichList
      loopType = random
      nReps = 1
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      Routine passage1
      Routine challenge1
      Routine readyScreen1
      Routine passage2
      Routine challenge2
      Routine readyScreen2
    LoopTerminator trials
  LoopTerminator counterbalance
  Routine readComplete
  Routine introLDT
  Routine introPractice
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/ldt_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ldtPractice', 'desplay'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'episode'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'path'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'plaz'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'clality'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'board'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'crank'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'haer'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'bodidy'), ('correctAnswer', 'f')])]
    Routine fixPractice
    Routine ldtPractice
    Routine feedback
  LoopTerminator trials_2
  Routine moreInstruct
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = resources/ldt_wordList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ldtStim': 'accident', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'act', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'aerial', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'affection', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'aisle', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'apology', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'berry', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'blame', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'boot', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'bother', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'brother', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'burner', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'business', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'butter', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'cancer', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'cash', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'cause', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'champion', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'circuit', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'circus', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'cologne', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'confusion', 'wordType': 'word', 'correctAnswer': 'j'},
      {'ldtStim': 'corpse', 'wordType': 'word', 'correctAnswer': 'j'}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
    Routine fixLdtTask
    Routine ldtTask
    Routine interTrial
  LoopTerminator trials_3
  Routine goodbye
